# CONFOCAL + PULSED MEASUREMENT CFG FILE
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    microwave_dummy:
        module.Class: 'microwave.mw_source_dummy.MicrowaveDummy'
        gpib_address: 'dummy'
        gpib_timeout: 20

    mw_source_srssg:
        module.Class: 'microwave.mw_source_srssg_LAN.MicrowaveSRSSG'
        awg_ip_address: "10.107.54.148"
        awg_port: 5025 # the port number as integer


    nicard:
        module.Class: 'national_instruments_x_series.NationalInstrumentsXSeries'
        clock_channel: '/Dev1/Ctr0'
        counter_channels:
            - 'Dev1/ctr1'
        scanner_clock_channel: '/Dev1/Ctr2'
        scanner_counter_channels:
            - '/Dev1/Ctr3'
        photon_sources:
            - '/Dev1/PFI3'
        scanner_ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
            - '/Dev1/AO2'
            - '/Dev1/AO3'
        scanner_position_ranges:
            - [0.1e-6, 200e-6]
            - [0.1e-6, 200e-6]
            - [0.1e-6, 200e-6]
            - [-10, 10]
        scanner_voltage_ranges:
            - [0.001, 10]
            - [0.001, 10]
            - [0.001, 10]
            - [0, 10]
        default_samples_number: 10
        default_clock_frequency: 100
        default_scanner_clock_frequency: 100
        gate_in_channel: '/Dev1/PFI0'
        counting_edge_rising: True
        odmr_trigger_channel: '/Dev1/PFI15'


    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        source_channels: 1
        clock_frequency: 100
        count_distribution: 'dark_bright_poisson'
        remoteaccess: True

    #mydummyodmrcounter:
    #    module.Class: 'odmr_counter_dummy.ODMRCounterDummy'
    #    clock_frequency: 100
    #    number_of_channels: 3
    #    connect:
    #        fitlogic: 'fitlogic'

    NIFastcounter:
        #module.Class: 'fast_counter_dummy.FastCounterDummy'
        load_trace: None # path to the saved dummy trace

        module.Class: 'NICumulative_fastcounter_2.NIFastCounter'
        PD_Channel: '/Dev1/PFI3' #'/Dev1/PFI8' # photon counter channel  #/Dev1/PFI3 is the physical photon counting channel in simultaneous_analysis.py
        Clock_Channel: "/Dev1/Ctr1" #'/Dev1/Ctr2' ##"/Dev1/ctr1" is the counter channel in simultaneous_analysis.py ###But here its the base clock that sets the "bin width"/clock cycle
        Digital_Channel: '/Dev1/PFI0' # sync counter channel  #'/Dev1/PFI0' is the sync channel in simultaneous_analysis.py btw (though the method of counting is different)
        contrast_based_Aquisition: True


    PulseBlaster:
        #module.Class: 'pulser_dummy.PulserDummy'

        module.Class: 'spincore.pulse_blaster_esrpro.PulseBlasterESRPRO'
        clock_frequency: 500e6 # in Hz
        min_instr_len: 5    # number of clock cycles for minimal instruction
        debug_mode: False   # optional, to set the debug mode on or off.
        use_smart_pulse_creation: False # optional, default is false, try to
                                            # optimize the memory used on the device.
        #library_file: 'spinapi64.dll'  # optional, name of the library file
                                        # or  whole path to the file


logic:


    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    pulsedmasterlogic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegeneratorlogic'

    sequencegeneratorlogic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        #assets_storage_path: 'C:/Users/<username>/saved_pulsed_assets'
        #additional_predefined_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #additional_sampling_functions_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders
        #overhead_bytes: 4294967296  # Not properly implemented yet
        connect:
            pulsegenerator: 'PulseBlaster'

    pulsedmeasurementlogic:
        module.Class: 'pulsed.pulsed_measurement_logic_FastIntermittentTracking.PulsedMeasurementLogic'
        raw_data_save_type: 'text'  # optional
        #additional_extraction_path: 'C:\\Custom_dir\\Methods'  # optional
        #additional_analysis_path: 'C:\\Custom_dir\\Methods'  # optional
        connect:
            fastcounter: 'NIFastcounter'
            pulsegenerator: 'PulseBlaster'
            fitlogic: 'fitlogic'
            savelogic: 'savelogic'
            microwave: 'microwave_dummy'
            poimanagerlogic: 'poimanagerlogic'


    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'nicard'
            savelogic: 'savelogic'


    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'nicard'
            fitlogic: 'fitlogic'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scannerlogic'
            optimiserlogic: 'optimizerlogic'
            savelogic: 'savelogic'


    odmr_counter_microwave_interfuse:
        module.Class: 'interfuse.odmr_counter_microwave_interfuse.ODMRCounterMicrowaveInterfuse'
        connect:
            slowcounter: 'mydummycounter'
            microwave: 'mw_source_srssg'
            pulsedmasterlogic: 'pulsedmasterlogic'
            poimanagerlogic: 'poimanagerlogic'

    # this oder logic runs now with the interfuse
    odmrlogic2:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'odmr_counter_microwave_interfuse'
            fitlogic: 'fitlogic'
            microwave1: 'odmr_counter_microwave_interfuse'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'
        scanmode: 'LIST'


    fitlogic:
        module.Class: 'fit_logic.FitLogic'
        #additional_fit_methods_path: 'C:\\Custom_dir'  # optional, can also be lists on several folders

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]


    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True


    qdplotlogic:
        module.Class: 'qdplot_logic.QDPlotLogic'
        default_plot_number: 3
        connect:
            save_logic: 'savelogic'
            fit_logic: 'fitlogic'



gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'


    odmrgui_program_trigger:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic2'
            savelogic: 'savelogic'

    pulsedmeasurement:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsedmasterlogic'


    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02
        default_meter_prefix: 'u'

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic: 'poimanagerlogic'
            scannerlogic: 'scannerlogic'



    taskrunner:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'tasklogic'


    errortest:
        module.Class: 'testgui.TestGui'
        text: 'Random text from config'
        error: 'This config is required!'

    qdplotter:
        module.Class: 'qdplotter.qdplotter_gui.QDPlotterGui'
        pen_color_list: ['b', 'y', 'm', 'g']
        connect:
            qdplot_logic: 'qdplotlogic'




